<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <!-- camera settings -->
  <camera1>

    <!-- actual Andor features -->
    <exposure_time type="float">0.10</exposure_time>

    <!-- view settings -->
    <flip_horizontal type="int">0</flip_horizontal>
    <flip_vertical type="int">0</flip_vertical>
    <transpose type="int">0</transpose>
    <scalemax type="int">20000</scalemax>
    <scalemin type="int">200</scalemin>
    <max_intensity type="int">65536</max_intensity>
    <colortable type="string">ramp_sat.ctbl</colortable>
    <sync type="int">0</sync>
  </camera1>

  <!-- film settings -->
  <film>
    <filename type="string">zscan_750_647_561_488_405_s30_n1000</filename> 
    <acq_mode type="string">fixed_length</acq_mode>
    <frames type="int">150</frames>
    <logfile type="string">D:\Pu\logs\image_log.txt</logfile>
    <auto_increment type="int">1</auto_increment>
    <auto_shutters type="int">1</auto_shutters>
    <want_bell type="int">1</want_bell>
    <filetype type="string">.dax</filetype>
  </film>
  
  <!-- illumination settings -->
  <illumination>
  	<default_power type="custom">0.4,0.08,0.3,0.04,0.03</default_power>
  	<shutters type="string">shutter_750_647_561_488_405_s30.xml</shutters>
    <on_off_state type="custom">False,False,False,False,False</on_off_state>
    <power_buttons type="custom">[[['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.01]]]</power_buttons>
  </illumination>

  <!-- focus lock settings -->
  <focuslock>
	<locked>
      <buffer_length type="int">5</buffer_length>
      <lock_gain type="float">0.1</lock_gain>
      <lock_gain_max type="float">0.1</lock_gain_max>
      <minimum_sum type="float">-1.0</minimum_sum>
      <offset_threshold type="float">50.0</offset_threshold>
    </locked>
  	<hardware_z_scan>
		<z_offsets type="string">0,0,0,0,0,1,1,1,1,1,2,2,2,2,2,3,3,3,3,3,4,4,4,4,4,5,5,5,5,5,6,6,6,6,6,7,7,7,7,7,8,8,8,8,8,9,9,9,9,9,10,10,10,10,10,11,11,11,11,11,12,12,12,12,12,13,13,13,13,13,14,14,14,14,14,15,15,15,15,15,16,16,16,16,16,17,17,17,17,17,18,18,18,18,18,19,19,19,19,19,20,20,20,20,20,21,21,21,21,21,22,22,22,22,22,23,23,23,23,23,24,24,24,24,24,25,25,25,25,25,26,26,26,26,26,27,27,27,27,27,28,28,28,28,28,29,29,29,29,29</z_offsets>
	</hardware_z_scan>

  </focuslock>
  

</settings>
